batch mzmine_version="4.0.3"

batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule"
  Raw data files type="NAME_PATTERN": name_pattern *Chrom*_hpos*
  Scan filters selected="true"
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    MS level filter selected="MS1, level = 1": 1
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    Polarity: Any
    Spectrum type: ANY
  Scan types (IMS): All scan types
  Mass detector selected_item="Factor of lowest signal"
    Noise factor: 5.0
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  Denormalize fragment scans (traps): true

batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule"
  Raw data files type="NAME_PATTERN": name_pattern *Chrom*_hpos*
  Scan filters selected="true"
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    MS level filter selected="MSn, level ≥ 2": 3
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    Polarity: Any
    Spectrum type: ANY
  Scan types (IMS): All scan types
  Mass detector selected_item="Factor of lowest signal"
    Noise factor: 0.0
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  Denormalize fragment scans (traps): true

batchstep method="io.github.mzmine.modules.dataprocessing.featdet_adapchromatogrambuilder.ModularADAPChromatogramBuilderModule"
  Raw data files type="NAME_PATTERN": name_pattern *Chrom*_hpos*
  Scan filters selected="true"
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    Retention time: min 0.3, max 8.0
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    MS level filter selected="MS1, level = 1": 1
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    Polarity: Any
    Spectrum type: ANY
  Minimum consecutive scans: 5
  Minimum intensity for consecutive scans: 2000.0
  Minimum absolute height: 10000.0
  m/z tolerance (scan-to-scan): absolutetolerance 0.002, ppmtolerance 10.0
  Suffix: eics
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
batchstep method="io.github.mzmine.modules.dataprocessing.featdet_smoothing.SmoothingModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Smoothing algorithm selected_item="Savitzky Golay"
    Retention time smoothing selected="true": 5
    Mobility smoothing selected="false"
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  Original feature list: REMOVE
  Suffix: sm

batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.minimumsearch.MinimumSearchFeatureResolverModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Suffix: r
  Original feature list: REMOVE
  MS/MS scan pairing selected="true"
    MS1 to MS2 precursor tolerance (m/z): absolutetolerance 0.01, ppmtolerance 10.0
    Retention time filter selected="Use feature edges" unit="MINUTES": 0.05
    Minimum relative feature height selected="true": 0.25
    Minimum required signals selected="true": 1
    Limit by ion mobility edges: true
    Merge MS/MS spectra (TIMS): false
    Minimum signal intensity (absolute, TIMS) selected="false"
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    Minimum signal intensity (relative, TIMS) selected="false"
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  Dimension: Retention time
  Chromatographic threshold: 0.805
  Minimum search range RT/Mobility (absolute): 0.05
  Minimum relative height: 0.0
  Minimum absolute height: 10000.0
  Min ratio of peak top/edge: 2.0
  Peak duration range (min/mobility): min 0.0, max 1.51
  Minimum scans (data points): 5

batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopegrouper.IsotopeGrouperModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Name suffix: deiso
  m/z tolerance (intra-sample): absolutetolerance 0.0015, ppmtolerance 3.0
  Retention time tolerance unit="MINUTES": 0.04
  Mobility tolerance selected="false"
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  Monotonic shape: true
  Maximum charge: 2
  Representative isotope: Most intense
  Never remove feature with MS2: true
  Original feature list: PROCESS IN PLACE

batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopefinder.IsotopeFinderModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Chemical elements: H,C,N,O,S
  m/z tolerance (feature-to-scan): absolutetolerance 0.0015, ppmtolerance 3.0
  Maximum charge of isotope m/z: 1
  Search in scans: SINGLE MOST INTENSE

batchstep method="io.github.mzmine.modules.dataprocessing.align_join.JoinAlignerModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Feature list name: CHROM_HPOS
  m/z tolerance (sample-to-sample): absolutetolerance 0.0015, ppmtolerance 5.0
  Weight for m/z: 3.0
  Retention time tolerance unit="MINUTES": 0.1
  Weight for RT: 1.0
  Mobility tolerance selected="false"
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  Mobility weight: 1.0
  Require same charge state: false
  Require same ID: false
  Compare isotope pattern selected="false"
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  Compare spectra similarity selected="false"
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  Original feature list: REMOVE

batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Name suffix: 13C peak
  Minimum aligned features (samples) selected="false"
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  Minimum features in an isotope pattern selected="false"
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  Validate 13C isotope pattern selected="true"
    m/z tolerance: absolutetolerance 0.0015, ppmtolerance 3.0
    Max charge: 2
    Estimate minimum carbon: true
    Remove if 13C: true
    Exclude isotopes: O
  Remove redundant isotope rows: false
  m/z selected="true": min 180.0, max 580.0
  Retention time selected="false"
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  features duration range selected="false"
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  Chromatographic FWHM selected="false"
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  Charge selected="false"
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  Kendrick mass defect selected="false"
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  Parameter: No parameters defined
  Only identified?: false
  Text in identity selected="false"
  Text in comment selected="false"
  Keep or remove rows: Keep rows that match all criteria
  Feature with MS2 scan: false
  Never remove feature with MS2: false
  Never remove annotated rows: false
  Reset the feature number ID: false
  Mass defect selected="false"
  Original feature list: PROCESS IN PLACE

batchstep method="io.github.mzmine.modules.dataprocessing.filter_blanksubtraction.FeatureListBlankSubtractionModule"
  Aligned feature list type="BATCH_LAST_FEATURELISTS"
  Blank/Control raw data files type="NAME_PATTERN": name_pattern *lank*Chrom*_hpos*
  Minimum # of detection in blanks: 1
  Quantification: Area
  Ratio type: MAXIMUM
  Fold change increase selected="true": 6.0
  Keep or remove features (of rows) below fold change: REMOVE - Only keep features above fold change
  Create secondary list of subtracted features: false
  Suffix: subtracted

batchstep method="io.github.mzmine.modules.dataprocessing.gapfill_peakfinder.multithreaded.MultiThreadPeakFinderModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Name suffix: gaps
  Intensity tolerance: 0.2
  m/z tolerance (sample-to-sample): absolutetolerance 0.002, ppmtolerance 10.0
  Retention time tolerance unit="MINUTES": 0.05
  Minimum scans (data points): 2
  Original feature list: PROCESS IN PLACE

batchstep method="io.github.mzmine.modules.dataprocessing.filter_duplicatefilter.DuplicateFilterModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Name suffix: dup
  Filter mode: NEW AVERAGE
  m/z tolerance: absolutetolerance 8.0E-4, ppmtolerance 1.5
  RT tolerance unit="MINUTES": 0.035
  Mobility tolerance selected="false"
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  Require same identification: false
  Original feature list: PROCESS IN PLACE

batchstep method="io.github.mzmine.modules.dataprocessing.group_metacorrelate.corrgrouping.CorrelateGroupingModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  RT tolerance unit="MINUTES": 0.055
  Minimum feature height: 0.0
  Intensity threshold for correlation: 5.0
  Min samples filter
    Min samples in all: abs 1, rel 0.0
    Min samples in group: abs 0, rel 0.0
    Min %-intensity overlap: 0.6
    Exclude gap-filled features: true
  Feature shape correlation selected="true"
    Min data points: 5
    Min data points on edge: 2
    Measure: PEARSON
    Min feature shape correlation: 0.85
    Min total correlation selected="false"
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  Feature height correlation selected="true"
    Minimum samples: 2
    Measure: PEARSON
    Min correlation: 0.7
  Suffix (or auto) selected="false"
  Advanced selected="true"
    Keep extended stats: false
    Simplify for ≥ samples: 250

batchstep method="io.github.mzmine.modules.dataprocessing.id_ion_identity_networking.ionidnetworking.IonNetworkingModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  m/z tolerance (intra-sample): absolutetolerance 0.0015, ppmtolerance 3.0
  Check: ALL FEATURES
  Min height: 0.0
  Ion identity library
    MS mode: POSITIVE
    Maximum charge: 2
    Maximum molecules/cluster: 2
    Adducts
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      adduct_type selected="true" subpart charge="1" mass_difference="-5.4858E-4" name="e" type="ADDUCT"
      adduct_type selected="true" subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"
      adduct_type selected="true" subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"
      adduct_type selected="true" subpart charge="1" mass_difference="38.963158" mol_formula="K" name="K" type="ADDUCT"
      adduct_type selected="true" subpart charge="1" mass_difference="18.033823" mol_formula="NH4" name="NH4" type="ADDUCT"
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      adduct_type selected="true"
        subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"
        subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"
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      modification_type selected="true" subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"
      modification_type selected="true"
        subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"
        subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"
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      modification_type selected="true" subpart charge="0" mass_difference="-17.026549" mol_formula="NH3" name="NH3" type="NEUTRAL_LOSS"
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      modification_type selected="true" subpart charge="0" mass_difference="-43.989829" mol_formula="CO2" name="CO2" type="NEUTRAL_LOSS"
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      modification_type selected="true" subpart charge="0" mass_difference="46.005479" mol_formula="CHOOH" name="HFA" type="CLUSTER"
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      modification_type selected="true" subpart charge="0" mass_difference="32.026215" mol_formula="CH3OH" name="MeOH" type="CLUSTER"
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  Annotation refinement selected="true"
    Minimum size selected="false"
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    Delete small networks without major ion: true
    Delete smaller networks: Link threshold selected="true": 4
    Delete networks without monomer: true
    Delete rows witout ion id: false

batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule"
  Raw data files type="NAME_PATTERN": name_pattern *Chrom*_npos*
  Scan filters selected="true"
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    MS level filter selected="MS1, level = 1": 1
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    Polarity: Any
    Spectrum type: ANY
  Scan types (IMS): All scan types
  Mass detector selected_item="Factor of lowest signal"
    Noise factor: 5.0
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  Denormalize fragment scans (traps): true

batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule"
  Raw data files type="NAME_PATTERN": name_pattern *Chrom*_npos*
  Scan filters selected="true"
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    MS level filter selected="MSn, level ≥ 2": 3
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    Polarity: Any
    Spectrum type: ANY
  Scan types (IMS): All scan types
  Mass detector selected_item="Factor of lowest signal"
    Noise factor: 0.0
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  Denormalize fragment scans (traps): true

batchstep method="io.github.mzmine.modules.dataprocessing.featdet_adapchromatogrambuilder.ModularADAPChromatogramBuilderModule"
  Raw data files type="NAME_PATTERN": name_pattern *Chrom*_npos*
  Scan filters selected="true"
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    Retention time: min 0.3, max 8.0
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    MS level filter selected="MS1, level = 1": 1
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    Polarity: Any
    Spectrum type: ANY
  Minimum consecutive scans: 5
  Minimum intensity for consecutive scans: 2000.0
  Minimum absolute height: 10000.0
  m/z tolerance (scan-to-scan): absolutetolerance 0.002, ppmtolerance 10.0
  Suffix: eics
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
batchstep method="io.github.mzmine.modules.dataprocessing.featdet_smoothing.SmoothingModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Smoothing algorithm selected_item="Savitzky Golay"
    Retention time smoothing selected="true": 5
    Mobility smoothing selected="false"
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  Original feature list: REMOVE
  Suffix: sm

batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.minimumsearch.MinimumSearchFeatureResolverModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Suffix: r
  Original feature list: REMOVE
  MS/MS scan pairing selected="true"
    MS1 to MS2 precursor tolerance (m/z): absolutetolerance 0.01, ppmtolerance 10.0
    Retention time filter selected="Use feature edges" unit="MINUTES": 0.05
    Minimum relative feature height selected="true": 0.25
    Minimum required signals selected="true": 1
    Limit by ion mobility edges: true
    Merge MS/MS spectra (TIMS): false
    Minimum signal intensity (absolute, TIMS) selected="false"
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    Minimum signal intensity (relative, TIMS) selected="false"
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  Dimension: Retention time
  Chromatographic threshold: 0.805
  Minimum search range RT/Mobility (absolute): 0.05
  Minimum relative height: 0.0
  Minimum absolute height: 10000.0
  Min ratio of peak top/edge: 2.0
  Peak duration range (min/mobility): min 0.0, max 1.51
  Minimum scans (data points): 5

batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopegrouper.IsotopeGrouperModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Name suffix: deiso
  m/z tolerance (intra-sample): absolutetolerance 0.0015, ppmtolerance 3.0
  Retention time tolerance unit="MINUTES": 0.04
  Mobility tolerance selected="false"
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  Monotonic shape: true
  Maximum charge: 2
  Representative isotope: Most intense
  Never remove feature with MS2: true
  Original feature list: PROCESS IN PLACE

batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopefinder.IsotopeFinderModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Chemical elements: H,C,N,O,S
  m/z tolerance (feature-to-scan): absolutetolerance 0.0015, ppmtolerance 3.0
  Maximum charge of isotope m/z: 1
  Search in scans: SINGLE MOST INTENSE

batchstep method="io.github.mzmine.modules.dataprocessing.align_join.JoinAlignerModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Feature list name: CHROM_NPOS
  m/z tolerance (sample-to-sample): absolutetolerance 0.0015, ppmtolerance 5.0
  Weight for m/z: 3.0
  Retention time tolerance unit="MINUTES": 0.1
  Weight for RT: 1.0
  Mobility tolerance selected="false"
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  Mobility weight: 1.0
  Require same charge state: false
  Require same ID: false
  Compare isotope pattern selected="false"
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  Compare spectra similarity selected="false"
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  Original feature list: REMOVE

batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Name suffix: 13C peak
  Minimum aligned features (samples) selected="false"
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  Minimum features in an isotope pattern selected="false"
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  Validate 13C isotope pattern selected="true"
    m/z tolerance: absolutetolerance 0.0015, ppmtolerance 3.0
    Max charge: 2
    Estimate minimum carbon: true
    Remove if 13C: true
    Exclude isotopes: O
  Remove redundant isotope rows: false
  m/z selected="false"
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  Retention time selected="false"
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  features duration range selected="false"
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  Chromatographic FWHM selected="false"
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  Charge selected="false"
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  Kendrick mass defect selected="false"
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  Parameter: No parameters defined
  Only identified?: false
  Text in identity selected="false"
  Text in comment selected="false"
  Keep or remove rows: Keep rows that match all criteria
  Feature with MS2 scan: false
  Never remove feature with MS2: false
  Never remove annotated rows: false
  Reset the feature number ID: false
  Mass defect selected="false"
  Original feature list: PROCESS IN PLACE

batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Name suffix: mz_filter
  Minimum aligned features (samples) selected="false"
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  Minimum features in an isotope pattern selected="false"
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  Validate 13C isotope pattern selected="false"
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  Remove redundant isotope rows: false
  m/z selected="true": min 180.0, max 580.0
  Retention time selected="false"
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  features duration range selected="false"
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  Chromatographic FWHM selected="false"
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  Charge selected="false"
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  Kendrick mass defect selected="false"
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  Parameter: No parameters defined
  Only identified?: false
  Text in identity selected="false"
  Text in comment selected="false"
  Keep or remove rows: Remove rows that match all criteria
  Feature with MS2 scan: false
  Never remove feature with MS2: false
  Never remove annotated rows: false
  Reset the feature number ID: false
  Mass defect selected="false"
  Original feature list: PROCESS IN PLACE

batchstep method="io.github.mzmine.modules.dataprocessing.filter_blanksubtraction.FeatureListBlankSubtractionModule"
  Aligned feature list type="BATCH_LAST_FEATURELISTS"
  Blank/Control raw data files type="NAME_PATTERN": name_pattern *lank*Chrom*_npos*
  Minimum # of detection in blanks: 1
  Quantification: Area
  Ratio type: MAXIMUM
  Fold change increase selected="true": 6.0
  Keep or remove features (of rows) below fold change: REMOVE - Only keep features above fold change
  Create secondary list of subtracted features: false
  Suffix: subtracted

batchstep method="io.github.mzmine.modules.dataprocessing.gapfill_peakfinder.multithreaded.MultiThreadPeakFinderModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Name suffix: gaps
  Intensity tolerance: 0.2
  m/z tolerance (sample-to-sample): absolutetolerance 0.002, ppmtolerance 10.0
  Retention time tolerance unit="MINUTES": 0.05
  Minimum scans (data points): 2
  Original feature list: PROCESS IN PLACE

batchstep method="io.github.mzmine.modules.dataprocessing.filter_duplicatefilter.DuplicateFilterModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Name suffix: dup
  Filter mode: NEW AVERAGE
  m/z tolerance: absolutetolerance 8.0E-4, ppmtolerance 1.5
  RT tolerance unit="MINUTES": 0.035
  Mobility tolerance selected="false"
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  Require same identification: false
  Original feature list: PROCESS IN PLACE

batchstep method="io.github.mzmine.modules.dataprocessing.group_metacorrelate.corrgrouping.CorrelateGroupingModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  RT tolerance unit="MINUTES": 0.055
  Minimum feature height: 0.0
  Intensity threshold for correlation: 5.0
  Min samples filter
    Min samples in all: abs 1, rel 0.0
    Min samples in group: abs 0, rel 0.0
    Min %-intensity overlap: 0.6
    Exclude gap-filled features: true
  Feature shape correlation selected="true"
    Min data points: 5
    Min data points on edge: 2
    Measure: PEARSON
    Min feature shape correlation: 0.85
    Min total correlation selected="false"
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  Feature height correlation selected="true"
    Minimum samples: 2
    Measure: PEARSON
    Min correlation: 0.7
  Suffix (or auto) selected="false"
  Advanced selected="true"
    Keep extended stats: false
    Simplify for ≥ samples: 250

batchstep method="io.github.mzmine.modules.dataprocessing.id_ion_identity_networking.ionidnetworking.IonNetworkingModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  m/z tolerance (intra-sample): absolutetolerance 0.0015, ppmtolerance 3.0
  Check: ALL FEATURES
  Min height: 0.0
  Ion identity library
    MS mode: POSITIVE
    Maximum charge: 2
    Maximum molecules/cluster: 2
    Adducts
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      adduct_type selected="true" subpart charge="1" mass_difference="-5.4858E-4" name="e" type="ADDUCT"
      adduct_type selected="true" subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"
      adduct_type selected="true" subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"
      adduct_type selected="true" subpart charge="1" mass_difference="38.963158" mol_formula="K" name="K" type="ADDUCT"
      adduct_type selected="true" subpart charge="1" mass_difference="18.033823" mol_formula="NH4" name="NH4" type="ADDUCT"
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      adduct_type selected="true"
        subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"
        subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"
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      modification_type selected="true" subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"
      modification_type selected="true"
        subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"
        subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"
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      modification_type selected="true" subpart charge="0" mass_difference="-17.026549" mol_formula="NH3" name="NH3" type="NEUTRAL_LOSS"
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      modification_type selected="true" subpart charge="0" mass_difference="-43.989829" mol_formula="CO2" name="CO2" type="NEUTRAL_LOSS"
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      modification_type selected="true" subpart charge="0" mass_difference="46.005479" mol_formula="CHOOH" name="HFA" type="CLUSTER"
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      modification_type selected="true" subpart charge="0" mass_difference="32.026215" mol_formula="CH3OH" name="MeOH" type="CLUSTER"
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  Annotation refinement selected="true"
    Minimum size selected="false"
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    Delete small networks without major ion: true
    Delete smaller networks: Link threshold selected="true": 4
    Delete networks without monomer: true
    Delete rows witout ion id: false

batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule"
  Raw data files type="NAME_PATTERN": name_pattern *Chrom*_neg*
  Scan filters selected="true"
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    MS level filter selected="MS1, level = 1": 1
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    Polarity: Any
    Spectrum type: ANY
  Scan types (IMS): All scan types
  Mass detector selected_item="Factor of lowest signal"
    Noise factor: 5.0
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  Denormalize fragment scans (traps): true

batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule"
  Raw data files type="NAME_PATTERN": name_pattern *Chrom*_neg*
  Scan filters selected="true"
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    MS level filter selected="MSn, level ≥ 2": 3
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    Polarity: Any
    Spectrum type: ANY
  Scan types (IMS): All scan types
  Mass detector selected_item="Factor of lowest signal"
    Noise factor: 0.0
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  Denormalize fragment scans (traps): true

batchstep method="io.github.mzmine.modules.dataprocessing.featdet_adapchromatogrambuilder.ModularADAPChromatogramBuilderModule"
  Raw data files type="NAME_PATTERN": name_pattern *Chrom*_neg*
  Scan filters selected="true"
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    Retention time: min 0.3, max 8.0
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    MS level filter selected="MS1, level = 1": 1
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    Polarity: Any
    Spectrum type: ANY
  Minimum consecutive scans: 5
  Minimum intensity for consecutive scans: 2000.0
  Minimum absolute height: 10000.0
  m/z tolerance (scan-to-scan): absolutetolerance 0.002, ppmtolerance 10.0
  Suffix: eics
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
batchstep method="io.github.mzmine.modules.dataprocessing.featdet_smoothing.SmoothingModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Smoothing algorithm selected_item="Savitzky Golay"
    Retention time smoothing selected="true": 5
    Mobility smoothing selected="false"
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  Original feature list: REMOVE
  Suffix: sm

batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.minimumsearch.MinimumSearchFeatureResolverModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Suffix: r
  Original feature list: REMOVE
  MS/MS scan pairing selected="true"
    MS1 to MS2 precursor tolerance (m/z): absolutetolerance 0.01, ppmtolerance 10.0
    Retention time filter selected="Use feature edges" unit="MINUTES": 0.05
    Minimum relative feature height selected="true": 0.25
    Minimum required signals selected="true": 1
    Limit by ion mobility edges: true
    Merge MS/MS spectra (TIMS): false
    Minimum signal intensity (absolute, TIMS) selected="false"
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    Minimum signal intensity (relative, TIMS) selected="false"
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  Dimension: Retention time
  Chromatographic threshold: 0.805
  Minimum search range RT/Mobility (absolute): 0.05
  Minimum relative height: 0.0
  Minimum absolute height: 10000.0
  Min ratio of peak top/edge: 2.0
  Peak duration range (min/mobility): min 0.0, max 1.51
  Minimum scans (data points): 5

batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopegrouper.IsotopeGrouperModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Name suffix: deiso
  m/z tolerance (intra-sample): absolutetolerance 0.0015, ppmtolerance 3.0
  Retention time tolerance unit="MINUTES": 0.04
  Mobility tolerance selected="false"
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  Monotonic shape: true
  Maximum charge: 2
  Representative isotope: Most intense
  Never remove feature with MS2: true
  Original feature list: PROCESS IN PLACE

batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopefinder.IsotopeFinderModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Chemical elements: H,C,N,O,S
  m/z tolerance (feature-to-scan): absolutetolerance 0.0015, ppmtolerance 3.0
  Maximum charge of isotope m/z: 1
  Search in scans: SINGLE MOST INTENSE

batchstep method="io.github.mzmine.modules.dataprocessing.align_join.JoinAlignerModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Feature list name: CHROM_NEG
  m/z tolerance (sample-to-sample): absolutetolerance 0.0015, ppmtolerance 5.0
  Weight for m/z: 3.0
  Retention time tolerance unit="MINUTES": 0.1
  Weight for RT: 1.0
  Mobility tolerance selected="false"
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  Mobility weight: 1.0
  Require same charge state: false
  Require same ID: false
  Compare isotope pattern selected="false"
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  Compare spectra similarity selected="false"
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  Original feature list: REMOVE

batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Name suffix: 13C peak
  Minimum aligned features (samples) selected="false"
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  Minimum features in an isotope pattern selected="false"
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  Validate 13C isotope pattern selected="true"
    m/z tolerance: absolutetolerance 0.0015, ppmtolerance 3.0
    Max charge: 2
    Estimate minimum carbon: true
    Remove if 13C: true
    Exclude isotopes: O
  Remove redundant isotope rows: false
  m/z selected="false"
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  Retention time selected="false"
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  features duration range selected="false"
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  Chromatographic FWHM selected="false"
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  Charge selected="false"
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  Kendrick mass defect selected="false"
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  Parameter: No parameters defined
  Only identified?: false
  Text in identity selected="false"
  Text in comment selected="false"
  Keep or remove rows: Keep rows that match all criteria
  Feature with MS2 scan: false
  Never remove feature with MS2: false
  Never remove annotated rows: false
  Reset the feature number ID: false
  Mass defect selected="false"
  Original feature list: PROCESS IN PLACE

batchstep method="io.github.mzmine.modules.dataprocessing.filter_blanksubtraction.FeatureListBlankSubtractionModule"
  Aligned feature list type="BATCH_LAST_FEATURELISTS"
  Blank/Control raw data files type="NAME_PATTERN": name_pattern *lank*Chrom*_neg*
  Minimum # of detection in blanks: 1
  Quantification: Area
  Ratio type: MAXIMUM
  Fold change increase selected="true": 6.0
  Keep or remove features (of rows) below fold change: REMOVE - Only keep features above fold change
  Create secondary list of subtracted features: false
  Suffix: subtracted

batchstep method="io.github.mzmine.modules.dataprocessing.gapfill_peakfinder.multithreaded.MultiThreadPeakFinderModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Name suffix: gaps
  Intensity tolerance: 0.2
  m/z tolerance (sample-to-sample): absolutetolerance 0.002, ppmtolerance 10.0
  Retention time tolerance unit="MINUTES": 0.05
  Minimum scans (data points): 2
  Original feature list: PROCESS IN PLACE

batchstep method="io.github.mzmine.modules.dataprocessing.filter_duplicatefilter.DuplicateFilterModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Name suffix: dup
  Filter mode: NEW AVERAGE
  m/z tolerance: absolutetolerance 8.0E-4, ppmtolerance 1.5
  RT tolerance unit="MINUTES": 0.035
  Mobility tolerance selected="false"
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  Require same identification: false
  Original feature list: PROCESS IN PLACE

batchstep method="io.github.mzmine.modules.dataprocessing.group_metacorrelate.corrgrouping.CorrelateGroupingModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  RT tolerance unit="MINUTES": 0.055
  Minimum feature height: 0.0
  Intensity threshold for correlation: 5.0
  Min samples filter
    Min samples in all: abs 1, rel 0.0
    Min samples in group: abs 0, rel 0.0
    Min %-intensity overlap: 0.6
    Exclude gap-filled features: true
  Feature shape correlation selected="true"
    Min data points: 5
    Min data points on edge: 2
    Measure: PEARSON
    Min feature shape correlation: 0.85
    Min total correlation selected="false"
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  Feature height correlation selected="true"
    Minimum samples: 2
    Measure: PEARSON
    Min correlation: 0.7
  Suffix (or auto) selected="false"
  Advanced selected="true"
    Keep extended stats: false
    Simplify for ≥ samples: 250

batchstep method="io.github.mzmine.modules.dataprocessing.id_ion_identity_networking.ionidnetworking.IonNetworkingModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  m/z tolerance (intra-sample): absolutetolerance 0.0015, ppmtolerance 3.0
  Check: ALL FEATURES
  Min height: 0.0
  Ion identity library
    MS mode: NEGATIVE
    Maximum charge: 2
    Maximum molecules/cluster: 2
    Adducts
      adduct_type selected="true" subpart charge="-1" mass_difference="5.4858E-4" name="e" type="ADDUCT"
      adduct_type selected="true" subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"
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      adduct_type selected="true" subpart charge="-1" mass_difference="34.969401" mol_formula="Cl" name="Cl" type="ADDUCT"
      adduct_type selected="true" subpart charge="-1" mass_difference="78.918886" mol_formula="Br" name="Br" type="ADDUCT"
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      adduct_type selected="true" subpart charge="-1" mass_difference="0.0" name="e" type="ADDUCT"
      modification_type selected="true" subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"
      modification_type selected="true"
        subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"
        subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"
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      modification_type selected="true" subpart charge="0" mass_difference="-17.026549" mol_formula="NH3" name="NH3" type="NEUTRAL_LOSS"
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      modification_type selected="true" subpart charge="0" mass_difference="-43.989829" mol_formula="CO2" name="CO2" type="NEUTRAL_LOSS"
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      modification_type selected="true" subpart charge="0" mass_difference="46.005479" mol_formula="CHOOH" name="HFA" type="CLUSTER"
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      modification_type selected="true" subpart charge="0" mass_difference="32.026215" mol_formula="CH3OH" name="MeOH" type="CLUSTER"
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  Annotation refinement selected="true"
    Minimum size selected="false"
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    Delete small networks without major ion: true
    Delete smaller networks: Link threshold selected="true": 4
    Delete networks without monomer: true
    Delete rows witout ion id: false

batchstep method="io.github.mzmine.modules.dataprocessing.align_append_rows.MergeAlignerModule"
  Feature lists type="NAME_PATTERN": name_pattern *CHROM*greq 5
  Feature list name: Merged_CHROM

batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule"
  Raw data files type="NAME_PATTERN": name_pattern *Kim*_hpos*
  Scan filters selected="true"
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    MS level filter selected="MS1, level = 1": 1
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    Polarity: Any
    Spectrum type: ANY
  Scan types (IMS): All scan types
  Mass detector selected_item="Factor of lowest signal"
    Noise factor: 5.0
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  Denormalize fragment scans (traps): true

batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule"
  Raw data files type="NAME_PATTERN": name_pattern *Kim*_hpos*
  Scan filters selected="true"
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    MS level filter selected="MSn, level ≥ 2": 3
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    Polarity: Any
    Spectrum type: ANY
  Scan types (IMS): All scan types
  Mass detector selected_item="Factor of lowest signal"
    Noise factor: 0.0
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  Denormalize fragment scans (traps): true

batchstep method="io.github.mzmine.modules.dataprocessing.featdet_adapchromatogrambuilder.ModularADAPChromatogramBuilderModule"
  Raw data files type="NAME_PATTERN": name_pattern *Kim*_hpos*
  Scan filters selected="true"
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    Retention time: min 0.3, max 8.0
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    MS level filter selected="MS1, level = 1": 1
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    Polarity: Any
    Spectrum type: ANY
  Minimum consecutive scans: 5
  Minimum intensity for consecutive scans: 2000.0
  Minimum absolute height: 10000.0
  m/z tolerance (scan-to-scan): absolutetolerance 0.002, ppmtolerance 10.0
  Suffix: eics
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
batchstep method="io.github.mzmine.modules.dataprocessing.featdet_smoothing.SmoothingModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Smoothing algorithm selected_item="Savitzky Golay"
    Retention time smoothing selected="true": 5
    Mobility smoothing selected="false"
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  Original feature list: REMOVE
  Suffix: sm

batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.minimumsearch.MinimumSearchFeatureResolverModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Suffix: r
  Original feature list: REMOVE
  MS/MS scan pairing selected="true"
    MS1 to MS2 precursor tolerance (m/z): absolutetolerance 0.01, ppmtolerance 10.0
    Retention time filter selected="Use feature edges" unit="MINUTES": 0.05
    Minimum relative feature height selected="true": 0.25
    Minimum required signals selected="true": 1
    Limit by ion mobility edges: true
    Merge MS/MS spectra (TIMS): false
    Minimum signal intensity (absolute, TIMS) selected="false"
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    Minimum signal intensity (relative, TIMS) selected="false"
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  Dimension: Retention time
  Chromatographic threshold: 0.805
  Minimum search range RT/Mobility (absolute): 0.05
  Minimum relative height: 0.0
  Minimum absolute height: 10000.0
  Min ratio of peak top/edge: 2.0
  Peak duration range (min/mobility): min 0.0, max 1.51
  Minimum scans (data points): 5

batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopegrouper.IsotopeGrouperModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Name suffix: deiso
  m/z tolerance (intra-sample): absolutetolerance 0.0015, ppmtolerance 3.0
  Retention time tolerance unit="MINUTES": 0.04
  Mobility tolerance selected="false"
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  Monotonic shape: true
  Maximum charge: 2
  Representative isotope: Most intense
  Never remove feature with MS2: true
  Original feature list: PROCESS IN PLACE

batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopefinder.IsotopeFinderModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Chemical elements: H,C,N,O,S
  m/z tolerance (feature-to-scan): absolutetolerance 0.0015, ppmtolerance 3.0
  Maximum charge of isotope m/z: 1
  Search in scans: SINGLE MOST INTENSE

batchstep method="io.github.mzmine.modules.dataprocessing.align_join.JoinAlignerModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Feature list name: KIM_HPOS
  m/z tolerance (sample-to-sample): absolutetolerance 0.0015, ppmtolerance 5.0
  Weight for m/z: 3.0
  Retention time tolerance unit="MINUTES": 0.1
  Weight for RT: 1.0
  Mobility tolerance selected="false"
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  Mobility weight: 1.0
  Require same charge state: false
  Require same ID: false
  Compare isotope pattern selected="false"
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  Compare spectra similarity selected="false"
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  Original feature list: REMOVE

batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Name suffix: 13C peak
  Minimum aligned features (samples) selected="false"
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  Minimum features in an isotope pattern selected="false"
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  Validate 13C isotope pattern selected="true"
    m/z tolerance: absolutetolerance 0.0015, ppmtolerance 3.0
    Max charge: 2
    Estimate minimum carbon: true
    Remove if 13C: true
    Exclude isotopes: O
  Remove redundant isotope rows: false
  m/z selected="true": min 180.0, max 580.0
  Retention time selected="false"
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  features duration range selected="false"
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  Chromatographic FWHM selected="false"
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  Charge selected="false"
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  Kendrick mass defect selected="false"
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  Parameter: No parameters defined
  Only identified?: false
  Text in identity selected="false"
  Text in comment selected="false"
  Keep or remove rows: Keep rows that match all criteria
  Feature with MS2 scan: false
  Never remove feature with MS2: false
  Never remove annotated rows: false
  Reset the feature number ID: false
  Mass defect selected="false"
  Original feature list: PROCESS IN PLACE

batchstep method="io.github.mzmine.modules.dataprocessing.filter_blanksubtraction.FeatureListBlankSubtractionModule"
  Aligned feature list type="BATCH_LAST_FEATURELISTS"
  Blank/Control raw data files type="NAME_PATTERN": name_pattern *lank*Kim*_hpos*
  Minimum # of detection in blanks: 1
  Quantification: Area
  Ratio type: MAXIMUM
  Fold change increase selected="true": 6.0
  Keep or remove features (of rows) below fold change: REMOVE - Only keep features above fold change
  Create secondary list of subtracted features: false
  Suffix: subtracted

batchstep method="io.github.mzmine.modules.dataprocessing.gapfill_peakfinder.multithreaded.MultiThreadPeakFinderModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Name suffix: gaps
  Intensity tolerance: 0.2
  m/z tolerance (sample-to-sample): absolutetolerance 0.002, ppmtolerance 10.0
  Retention time tolerance unit="MINUTES": 0.05
  Minimum scans (data points): 2
  Original feature list: PROCESS IN PLACE

batchstep method="io.github.mzmine.modules.dataprocessing.filter_duplicatefilter.DuplicateFilterModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Name suffix: dup
  Filter mode: NEW AVERAGE
  m/z tolerance: absolutetolerance 8.0E-4, ppmtolerance 1.5
  RT tolerance unit="MINUTES": 0.035
  Mobility tolerance selected="false"
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  Require same identification: false
  Original feature list: PROCESS IN PLACE

batchstep method="io.github.mzmine.modules.dataprocessing.group_metacorrelate.corrgrouping.CorrelateGroupingModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  RT tolerance unit="MINUTES": 0.055
  Minimum feature height: 0.0
  Intensity threshold for correlation: 5.0
  Min samples filter
    Min samples in all: abs 1, rel 0.0
    Min samples in group: abs 0, rel 0.0
    Min %-intensity overlap: 0.6
    Exclude gap-filled features: true
  Feature shape correlation selected="true"
    Min data points: 5
    Min data points on edge: 2
    Measure: PEARSON
    Min feature shape correlation: 0.85
    Min total correlation selected="false"
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  Feature height correlation selected="true"
    Minimum samples: 2
    Measure: PEARSON
    Min correlation: 0.7
  Suffix (or auto) selected="false"
  Advanced selected="true"
    Keep extended stats: false
    Simplify for ≥ samples: 250

batchstep method="io.github.mzmine.modules.dataprocessing.id_ion_identity_networking.ionidnetworking.IonNetworkingModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  m/z tolerance (intra-sample): absolutetolerance 0.0015, ppmtolerance 3.0
  Check: ALL FEATURES
  Min height: 0.0
  Ion identity library
    MS mode: POSITIVE
    Maximum charge: 2
    Maximum molecules/cluster: 2
    Adducts
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      adduct_type selected="true" subpart charge="1" mass_difference="-5.4858E-4" name="e" type="ADDUCT"
      adduct_type selected="true" subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"
      adduct_type selected="true" subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"
      adduct_type selected="true" subpart charge="1" mass_difference="38.963158" mol_formula="K" name="K" type="ADDUCT"
      adduct_type selected="true" subpart charge="1" mass_difference="18.033823" mol_formula="NH4" name="NH4" type="ADDUCT"
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      adduct_type selected="true"
        subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"
        subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"
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      modification_type selected="true" subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"
      modification_type selected="true"
        subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"
        subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"
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      modification_type selected="true" subpart charge="0" mass_difference="-17.026549" mol_formula="NH3" name="NH3" type="NEUTRAL_LOSS"
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      modification_type selected="true" subpart charge="0" mass_difference="-43.989829" mol_formula="CO2" name="CO2" type="NEUTRAL_LOSS"
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      modification_type selected="true" subpart charge="0" mass_difference="46.005479" mol_formula="CHOOH" name="HFA" type="CLUSTER"
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      modification_type selected="true" subpart charge="0" mass_difference="32.026215" mol_formula="CH3OH" name="MeOH" type="CLUSTER"
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  Annotation refinement selected="true"
    Minimum size selected="false"
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    Delete small networks without major ion: true
    Delete smaller networks: Link threshold selected="true": 4
    Delete networks without monomer: true
    Delete rows witout ion id: false

batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule"
  Raw data files type="NAME_PATTERN": name_pattern *Kim*_npos*
  Scan filters selected="true"
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    MS level filter selected="MS1, level = 1": 1
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    Polarity: Any
    Spectrum type: ANY
  Scan types (IMS): All scan types
  Mass detector selected_item="Factor of lowest signal"
    Noise factor: 5.0
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  Denormalize fragment scans (traps): true

batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule"
  Raw data files type="NAME_PATTERN": name_pattern *Kim*_npos*
  Scan filters selected="true"
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    MS level filter selected="MSn, level ≥ 2": 3
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    Polarity: Any
    Spectrum type: ANY
  Scan types (IMS): All scan types
  Mass detector selected_item="Factor of lowest signal"
    Noise factor: 0.0
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  Denormalize fragment scans (traps): true

batchstep method="io.github.mzmine.modules.dataprocessing.featdet_adapchromatogrambuilder.ModularADAPChromatogramBuilderModule"
  Raw data files type="NAME_PATTERN": name_pattern *Kim*_npos*
  Scan filters selected="true"
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    Retention time: min 0.3, max 8.0
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    MS level filter selected="MS1, level = 1": 1
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    Polarity: Any
    Spectrum type: ANY
  Minimum consecutive scans: 5
  Minimum intensity for consecutive scans: 2000.0
  Minimum absolute height: 10000.0
  m/z tolerance (scan-to-scan): absolutetolerance 0.002, ppmtolerance 10.0
  Suffix: eics
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
batchstep method="io.github.mzmine.modules.dataprocessing.featdet_smoothing.SmoothingModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Smoothing algorithm selected_item="Savitzky Golay"
    Retention time smoothing selected="true": 5
    Mobility smoothing selected="false"
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  Original feature list: REMOVE
  Suffix: sm

batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.minimumsearch.MinimumSearchFeatureResolverModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Suffix: r
  Original feature list: REMOVE
  MS/MS scan pairing selected="true"
    MS1 to MS2 precursor tolerance (m/z): absolutetolerance 0.01, ppmtolerance 10.0
    Retention time filter selected="Use feature edges" unit="MINUTES": 0.05
    Minimum relative feature height selected="true": 0.25
    Minimum required signals selected="true": 1
    Limit by ion mobility edges: true
    Merge MS/MS spectra (TIMS): false
    Minimum signal intensity (absolute, TIMS) selected="false"
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    Minimum signal intensity (relative, TIMS) selected="false"
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  Dimension: Retention time
  Chromatographic threshold: 0.805
  Minimum search range RT/Mobility (absolute): 0.05
  Minimum relative height: 0.0
  Minimum absolute height: 10000.0
  Min ratio of peak top/edge: 2.0
  Peak duration range (min/mobility): min 0.0, max 1.51
  Minimum scans (data points): 5

batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopegrouper.IsotopeGrouperModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Name suffix: deiso
  m/z tolerance (intra-sample): absolutetolerance 0.0015, ppmtolerance 3.0
  Retention time tolerance unit="MINUTES": 0.04
  Mobility tolerance selected="false"
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  Monotonic shape: true
  Maximum charge: 2
  Representative isotope: Most intense
  Never remove feature with MS2: true
  Original feature list: PROCESS IN PLACE

batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopefinder.IsotopeFinderModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Chemical elements: H,C,N,O,S
  m/z tolerance (feature-to-scan): absolutetolerance 0.0015, ppmtolerance 3.0
  Maximum charge of isotope m/z: 1
  Search in scans: SINGLE MOST INTENSE

batchstep method="io.github.mzmine.modules.dataprocessing.align_join.JoinAlignerModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Feature list name: KIM_NPOS
  m/z tolerance (sample-to-sample): absolutetolerance 0.0015, ppmtolerance 5.0
  Weight for m/z: 3.0
  Retention time tolerance unit="MINUTES": 0.1
  Weight for RT: 1.0
  Mobility tolerance selected="false"
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  Mobility weight: 1.0
  Require same charge state: false
  Require same ID: false
  Compare isotope pattern selected="false"
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  Compare spectra similarity selected="false"
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  Original feature list: REMOVE

batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Name suffix: 13C peak
  Minimum aligned features (samples) selected="false"
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  Minimum features in an isotope pattern selected="false"
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  Validate 13C isotope pattern selected="true"
    m/z tolerance: absolutetolerance 0.0015, ppmtolerance 3.0
    Max charge: 2
    Estimate minimum carbon: true
    Remove if 13C: true
    Exclude isotopes: O
  Remove redundant isotope rows: false
  m/z selected="false"
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  Retention time selected="false"
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  features duration range selected="false"
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  Chromatographic FWHM selected="false"
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  Charge selected="false"
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  Kendrick mass defect selected="false"
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  Parameter: No parameters defined
  Only identified?: false
  Text in identity selected="false"
  Text in comment selected="false"
  Keep or remove rows: Keep rows that match all criteria
  Feature with MS2 scan: false
  Never remove feature with MS2: false
  Never remove annotated rows: false
  Reset the feature number ID: false
  Mass defect selected="false"
  Original feature list: PROCESS IN PLACE

batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Name suffix: mz_filter
  Minimum aligned features (samples) selected="false"
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  Minimum features in an isotope pattern selected="false"
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  Validate 13C isotope pattern selected="false"
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  Remove redundant isotope rows: false
  m/z selected="true": min 180.0, max 580.0
  Retention time selected="false"
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  features duration range selected="false"
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  Chromatographic FWHM selected="false"
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  Charge selected="false"
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  Kendrick mass defect selected="false"
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  Parameter: No parameters defined
  Only identified?: false
  Text in identity selected="false"
  Text in comment selected="false"
  Keep or remove rows: Remove rows that match all criteria
  Feature with MS2 scan: false
  Never remove feature with MS2: false
  Never remove annotated rows: false
  Reset the feature number ID: false
  Mass defect selected="false"
  Original feature list: PROCESS IN PLACE

batchstep method="io.github.mzmine.modules.dataprocessing.filter_blanksubtraction.FeatureListBlankSubtractionModule"
  Aligned feature list type="BATCH_LAST_FEATURELISTS"
  Blank/Control raw data files type="NAME_PATTERN": name_pattern *lank*Kim*_npos*
  Minimum # of detection in blanks: 1
  Quantification: Area
  Ratio type: MAXIMUM
  Fold change increase selected="true": 6.0
  Keep or remove features (of rows) below fold change: REMOVE - Only keep features above fold change
  Create secondary list of subtracted features: false
  Suffix: subtracted

batchstep method="io.github.mzmine.modules.dataprocessing.gapfill_peakfinder.multithreaded.MultiThreadPeakFinderModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Name suffix: gaps
  Intensity tolerance: 0.2
  m/z tolerance (sample-to-sample): absolutetolerance 0.002, ppmtolerance 10.0
  Retention time tolerance unit="MINUTES": 0.05
  Minimum scans (data points): 2
  Original feature list: PROCESS IN PLACE

batchstep method="io.github.mzmine.modules.dataprocessing.filter_duplicatefilter.DuplicateFilterModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Name suffix: dup
  Filter mode: NEW AVERAGE
  m/z tolerance: absolutetolerance 8.0E-4, ppmtolerance 1.5
  RT tolerance unit="MINUTES": 0.035
  Mobility tolerance selected="false"
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  Require same identification: false
  Original feature list: PROCESS IN PLACE

batchstep method="io.github.mzmine.modules.dataprocessing.group_metacorrelate.corrgrouping.CorrelateGroupingModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  RT tolerance unit="MINUTES": 0.055
  Minimum feature height: 0.0
  Intensity threshold for correlation: 5.0
  Min samples filter
    Min samples in all: abs 1, rel 0.0
    Min samples in group: abs 0, rel 0.0
    Min %-intensity overlap: 0.6
    Exclude gap-filled features: true
  Feature shape correlation selected="true"
    Min data points: 5
    Min data points on edge: 2
    Measure: PEARSON
    Min feature shape correlation: 0.85
    Min total correlation selected="false"
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  Feature height correlation selected="true"
    Minimum samples: 2
    Measure: PEARSON
    Min correlation: 0.7
  Suffix (or auto) selected="false"
  Advanced selected="true"
    Keep extended stats: false
    Simplify for ≥ samples: 250

batchstep method="io.github.mzmine.modules.dataprocessing.id_ion_identity_networking.ionidnetworking.IonNetworkingModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  m/z tolerance (intra-sample): absolutetolerance 0.0015, ppmtolerance 3.0
  Check: ALL FEATURES
  Min height: 0.0
  Ion identity library
    MS mode: POSITIVE
    Maximum charge: 2
    Maximum molecules/cluster: 2
    Adducts
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      adduct_type selected="true" subpart charge="1" mass_difference="-5.4858E-4" name="e" type="ADDUCT"
      adduct_type selected="true" subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"
      adduct_type selected="true" subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"
      adduct_type selected="true" subpart charge="1" mass_difference="38.963158" mol_formula="K" name="K" type="ADDUCT"
      adduct_type selected="true" subpart charge="1" mass_difference="18.033823" mol_formula="NH4" name="NH4" type="ADDUCT"
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      adduct_type selected="true"
        subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"
        subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"
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      modification_type selected="true" subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"
      modification_type selected="true"
        subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"
        subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"
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      modification_type selected="true" subpart charge="0" mass_difference="-17.026549" mol_formula="NH3" name="NH3" type="NEUTRAL_LOSS"
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      modification_type selected="true" subpart charge="0" mass_difference="-43.989829" mol_formula="CO2" name="CO2" type="NEUTRAL_LOSS"
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      modification_type selected="true" subpart charge="0" mass_difference="46.005479" mol_formula="CHOOH" name="HFA" type="CLUSTER"
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      modification_type selected="true" subpart charge="0" mass_difference="32.026215" mol_formula="CH3OH" name="MeOH" type="CLUSTER"
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  Annotation refinement selected="true"
    Minimum size selected="false"
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    Delete small networks without major ion: true
    Delete smaller networks: Link threshold selected="true": 4
    Delete networks without monomer: true
    Delete rows witout ion id: false

batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule"
  Raw data files type="NAME_PATTERN": name_pattern *Kim*_neg*
  Scan filters selected="true"
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    MS level filter selected="MS1, level = 1": 1
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    Polarity: Any
    Spectrum type: ANY
  Scan types (IMS): All scan types
  Mass detector selected_item="Factor of lowest signal"
    Noise factor: 5.0
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  Denormalize fragment scans (traps): true

batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule"
  Raw data files type="NAME_PATTERN": name_pattern *Kim*_neg*
  Scan filters selected="true"
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    MS level filter selected="MSn, level ≥ 2": 3
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    Polarity: Any
    Spectrum type: ANY
  Scan types (IMS): All scan types
  Mass detector selected_item="Factor of lowest signal"
    Noise factor: 0.0
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  Denormalize fragment scans (traps): true

batchstep method="io.github.mzmine.modules.dataprocessing.featdet_adapchromatogrambuilder.ModularADAPChromatogramBuilderModule"
  Raw data files type="NAME_PATTERN": name_pattern *Kim*_neg*
  Scan filters selected="true"
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    Retention time: min 0.3, max 8.0
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    MS level filter selected="MS1, level = 1": 1
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    Polarity: Any
    Spectrum type: ANY
  Minimum consecutive scans: 5
  Minimum intensity for consecutive scans: 2000.0
  Minimum absolute height: 10000.0
  m/z tolerance (scan-to-scan): absolutetolerance 0.002, ppmtolerance 10.0
  Suffix: eics
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
batchstep method="io.github.mzmine.modules.dataprocessing.featdet_smoothing.SmoothingModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Smoothing algorithm selected_item="Savitzky Golay"
    Retention time smoothing selected="true": 5
    Mobility smoothing selected="false"
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  Original feature list: REMOVE
  Suffix: sm

batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.minimumsearch.MinimumSearchFeatureResolverModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Suffix: r
  Original feature list: REMOVE
  MS/MS scan pairing selected="true"
    MS1 to MS2 precursor tolerance (m/z): absolutetolerance 0.01, ppmtolerance 10.0
    Retention time filter selected="Use feature edges" unit="MINUTES": 0.05
    Minimum relative feature height selected="true": 0.25
    Minimum required signals selected="true": 1
    Limit by ion mobility edges: true
    Merge MS/MS spectra (TIMS): false
    Minimum signal intensity (absolute, TIMS) selected="false"
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    Minimum signal intensity (relative, TIMS) selected="false"
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  Dimension: Retention time
  Chromatographic threshold: 0.805
  Minimum search range RT/Mobility (absolute): 0.05
  Minimum relative height: 0.0
  Minimum absolute height: 10000.0
  Min ratio of peak top/edge: 2.0
  Peak duration range (min/mobility): min 0.0, max 1.51
  Minimum scans (data points): 5

batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopegrouper.IsotopeGrouperModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Name suffix: deiso
  m/z tolerance (intra-sample): absolutetolerance 0.0015, ppmtolerance 3.0
  Retention time tolerance unit="MINUTES": 0.04
  Mobility tolerance selected="false"
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  Monotonic shape: true
  Maximum charge: 2
  Representative isotope: Most intense
  Never remove feature with MS2: true
  Original feature list: PROCESS IN PLACE

batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopefinder.IsotopeFinderModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Chemical elements: H,C,N,O,S
  m/z tolerance (feature-to-scan): absolutetolerance 0.0015, ppmtolerance 3.0
  Maximum charge of isotope m/z: 1
  Search in scans: SINGLE MOST INTENSE

batchstep method="io.github.mzmine.modules.dataprocessing.align_join.JoinAlignerModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Feature list name: KIM_NEG
  m/z tolerance (sample-to-sample): absolutetolerance 0.0015, ppmtolerance 5.0
  Weight for m/z: 3.0
  Retention time tolerance unit="MINUTES": 0.1
  Weight for RT: 1.0
  Mobility tolerance selected="false"
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  Mobility weight: 1.0
  Require same charge state: false
  Require same ID: false
  Compare isotope pattern selected="false"
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  Compare spectra similarity selected="false"
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  Original feature list: REMOVE

batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Name suffix: 13C peak
  Minimum aligned features (samples) selected="false"
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  Minimum features in an isotope pattern selected="false"
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  Validate 13C isotope pattern selected="true"
    m/z tolerance: absolutetolerance 0.0015, ppmtolerance 3.0
    Max charge: 2
    Estimate minimum carbon: true
    Remove if 13C: true
    Exclude isotopes: O
  Remove redundant isotope rows: false
  m/z selected="false"
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  Retention time selected="false"
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  features duration range selected="false"
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  Chromatographic FWHM selected="false"
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  Charge selected="false"
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  Kendrick mass defect selected="false"
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  Parameter: No parameters defined
  Only identified?: false
  Text in identity selected="false"
  Text in comment selected="false"
  Keep or remove rows: Keep rows that match all criteria
  Feature with MS2 scan: false
  Never remove feature with MS2: false
  Never remove annotated rows: false
  Reset the feature number ID: false
  Mass defect selected="false"
  Original feature list: PROCESS IN PLACE

batchstep method="io.github.mzmine.modules.dataprocessing.filter_blanksubtraction.FeatureListBlankSubtractionModule"
  Aligned feature list type="BATCH_LAST_FEATURELISTS"
  Blank/Control raw data files type="NAME_PATTERN": name_pattern *lank*Kim*_neg*
  Minimum # of detection in blanks: 1
  Quantification: Area
  Ratio type: MAXIMUM
  Fold change increase selected="true": 6.0
  Keep or remove features (of rows) below fold change: REMOVE - Only keep features above fold change
  Create secondary list of subtracted features: false
  Suffix: subtracted

batchstep method="io.github.mzmine.modules.dataprocessing.gapfill_peakfinder.multithreaded.MultiThreadPeakFinderModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Name suffix: gaps
  Intensity tolerance: 0.2
  m/z tolerance (sample-to-sample): absolutetolerance 0.002, ppmtolerance 10.0
  Retention time tolerance unit="MINUTES": 0.05
  Minimum scans (data points): 2
  Original feature list: PROCESS IN PLACE

batchstep method="io.github.mzmine.modules.dataprocessing.filter_duplicatefilter.DuplicateFilterModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  Name suffix: dup
  Filter mode: NEW AVERAGE
  m/z tolerance: absolutetolerance 8.0E-4, ppmtolerance 1.5
  RT tolerance unit="MINUTES": 0.035
  Mobility tolerance selected="false"
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  Require same identification: false
  Original feature list: PROCESS IN PLACE

batchstep method="io.github.mzmine.modules.dataprocessing.group_metacorrelate.corrgrouping.CorrelateGroupingModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  RT tolerance unit="MINUTES": 0.055
  Minimum feature height: 0.0
  Intensity threshold for correlation: 5.0
  Min samples filter
    Min samples in all: abs 1, rel 0.0
    Min samples in group: abs 0, rel 0.0
    Min %-intensity overlap: 0.6
    Exclude gap-filled features: true
  Feature shape correlation selected="true"
    Min data points: 5
    Min data points on edge: 2
    Measure: PEARSON
    Min feature shape correlation: 0.85
    Min total correlation selected="false"
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  Feature height correlation selected="true"
    Minimum samples: 2
    Measure: PEARSON
    Min correlation: 0.7
  Suffix (or auto) selected="false"
  Advanced selected="true"
    Keep extended stats: false
    Simplify for ≥ samples: 250

batchstep method="io.github.mzmine.modules.dataprocessing.id_ion_identity_networking.ionidnetworking.IonNetworkingModule"
  Feature lists type="BATCH_LAST_FEATURELISTS"
  m/z tolerance (intra-sample): absolutetolerance 0.0015, ppmtolerance 3.0
  Check: ALL FEATURES
  Min height: 0.0
  Ion identity library
    MS mode: NEGATIVE
    Maximum charge: 2
    Maximum molecules/cluster: 2
    Adducts
      adduct_type selected="true" subpart charge="-1" mass_difference="5.4858E-4" name="e" type="ADDUCT"
      adduct_type selected="true" subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"
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      adduct_type selected="true" subpart charge="-1" mass_difference="34.969401" mol_formula="Cl" name="Cl" type="ADDUCT"
      adduct_type selected="true" subpart charge="-1" mass_difference="78.918886" mol_formula="Br" name="Br" type="ADDUCT"
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      adduct_type selected="true" subpart charge="-1" mass_difference="0.0" name="e" type="ADDUCT"
      modification_type selected="true" subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"
      modification_type selected="true"
        subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"
        subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"
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      modification_type selected="true" subpart charge="0" mass_difference="-17.026549" mol_formula="NH3" name="NH3" type="NEUTRAL_LOSS"
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      modification_type selected="true" subpart charge="0" mass_difference="-43.989829" mol_formula="CO2" name="CO2" type="NEUTRAL_LOSS"
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      modification_type selected="true" subpart charge="0" mass_difference="46.005479" mol_formula="CHOOH" name="HFA" type="CLUSTER"
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      modification_type selected="true" subpart charge="0" mass_difference="32.026215" mol_formula="CH3OH" name="MeOH" type="CLUSTER"
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  Annotation refinement selected="true"
    Minimum size selected="false"
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    Delete small networks without major ion: true
    Delete smaller networks: Link threshold selected="true": 4
    Delete networks without monomer: true
    Delete rows witout ion id: false

batchstep method="io.github.mzmine.modules.dataprocessing.align_append_rows.MergeAlignerModule"
  Feature lists type="NAME_PATTERN": name_pattern *KIM*greq 5
  Feature list name: Merged_KIM

batchstep method="io.github.mzmine.modules.dataprocessing.align_join.JoinAlignerModule"
  Feature lists type="NAME_PATTERN": name_pattern Merged*
  Feature list name: ALL_aligned_features_save-this
  m/z tolerance (sample-to-sample): absolutetolerance 0.0015, ppmtolerance 5.0
  Weight for m/z: 3.0
  Retention time tolerance unit="MINUTES": 0.1
  Weight for RT: 1.0
  Mobility tolerance selected="false"
  Mobility weight: 1.0
  Require same charge state: false
  Require same ID: false
  Compare isotope pattern selected="false"
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  Compare spectra similarity selected="false"
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  Original feature list: KEEP
